PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = emotional stroop effect
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 4.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'g','b','r'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome

        Here a word will come up and you are supposed to press 'r','g' or 'b' for the respective fonts that the word is in.
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/lab_assignment.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'joy', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'love', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'happiness', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'gratitude', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'peace', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'hope', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'laughter', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'bliss', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'euphoria', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'amusement', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'adore', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'delight', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'excitement', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'pleasure', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'enthusiasm ', 'colour': 'red', 'corr_resp': 'r', 'valence': 'positive'},
      {'word': 'chair', 'colour': 'red', 'corr_resp': 'r', 'valence': 'neutral'},
      {'word': 'table', 'colour': 'red', 'corr_resp': 'r', 'valence': 'neutral'},
      {'word': 'paper', 'colour': 'red', 'corr_resp': 'r', 'valence': 'neutral'},
      {'word': 'pencil', 'colour': 'red', 'corr_resp': 'r', 'valence': 'neutral'}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
    Routine trial
  LoopTerminator trials
